// electrode_controller.hoc is used to allow users to create any number of electrode configurations

numElectrodes = 100                 // The maximum number of electrodes allowed in a simulation
objref electrodes[numElectrodes]    // Array containing all electrodes


// This array will be used to keep track of all used and unused
//  indices in electrodes[]. The unused first unused index will store a value
//  that corresponds to the index of the next unused index, and so on.
//  The same will be done with all the currently used indices, each pointing to 
//  the next. Which will allow for being able to quickly loop through all
//  currently used indices, and quickly know the next available index.
//  -1 will denote the end of these chains
double availableElectrodes[numElectrodes]   

firstElectrodeIndex = -1    // Index of first used electrode
nextElectrodeIndex = 0      // Next free index in the electrode array
customElectrodes = 0   
proc turnOnCustomElectrodes(){
    // By calling this procedure, the normal electrode configurations are turned off
    customElectrodes = 1
}
proc turnOffCustomElectrodes(){
    // this proc turns off the custom electrode
    customElectrodes = 0
}

proc initElectrodes(){ local i
    objref electrodes[numElectrodes]            // clears all electrodes
    double availableElectrodes[numElectrodes]   // clears the list of indices
    firstElectrodeIndex = -1    // the first electrode does not exist so -1 is used
    nextElectrodeIndex = 0      // the first available index is 0

    for i=0,numElectrodes-1{              // loop through the availableElectrodes array
        availableElectrodes[i] = i+1    // each element points to the next available index
    }
    availableElectrodes[numElectrodes-1] = -1   // the last element terminates the chain
}
initElectrodes()

proc createElectrode(){ local tempIndex
    // create Electrode has multiple parameters for creating the electrode
    // the electrode is created
    type = $1   // 0=Sine, 1=Triangle, 2=Square, 3=Sine Ramp, 4=DCSine, 5=DC
    xElec = $2   // x position of the electrode (note that the axon is centered at 0)
    yElec = $3   // y position of the electrode (note the axon is at y=0)

    // create the electrode
    electrodes[nextElectrodeIndex] = new Electrode(nextElectrodeIndex, type, xElec, yElec)    

    // change the various index numbers to point to the next correct index
    tempIndex = nextElectrodeIndex
    nextElectrodeIndex = availableElectrodes[nextElectrodeIndex]    // set a new index for the next available index
    availableElectrodes[tempIndex] = firstElectrodeIndex   // make the new electrode the first electrode index
    firstElectrodeIndex = tempIndex
}

proc setExtracellular(){ local tempIndex, tempElectrode
    for tempIndex=0, totalSections-1{
        tempVoltage0 = 0          // set the initial voltage to 0
        tempVoltage1 = 0

        tempElectrode = firstElectrodeIndex // get index of first electrode
        while (tempElectrode != -1) {       // while there are still more electrodes
            tempVoltage0 += electrodes[tempElectrode].calcVoltageCompartment(tempIndex)
            tempVoltage1 += electrodes[tempElectrode].calcVoltageCompartment(tempIndex+1)

            tempElectrode = availableElectrodes[tempElectrode]  // move to the next electrode
        }

        // the ordering for segments is
        // Node - MYSA - FLUT - 6 X STIN - FLUT - MYSA
        //  which repeats and starts with a node and ends with a node
        if (secMat.x[tempIndex][0] == 1) { IS[ secMat.x[tempIndex][1] ].e_extracellular(0:1) = tempVoltage0:tempVoltage1 }
		if (secMat.x[tempIndex][0] == 2) { PS[ secMat.x[tempIndex][1] ].e_extracellular(0:1) = tempVoltage0:tempVoltage1 }
		if (secMat.x[tempIndex][0] == 3) { MAS[ secMat.x[tempIndex][1] ].e_extracellular(0:1) = tempVoltage0:tempVoltage1 }
		if (secMat.x[tempIndex][0] == 4) { node[ secMat.x[tempIndex][1] ].e_extracellular(0:1) = tempVoltage0:tempVoltage1 }
    }
}

proc setAmplitudeElectrodes(){
    // Sets the amplitude of all electrodes currently in the simulation
    // the amplitude in nA is passed as the only parameter
    tempElectrode = firstElectrodeIndex
    while (tempElectrode != -1) {       // while there are still more electrodes
        electrodes[tempElectrode].setAmp($1)
        tempElectrode = availableElectrodes[tempElectrode]  // move to the next electrode
    }
}

proc setDurationElectrodes(){
    // Sets the duration of all electrodes currently in the simulation
    // the duration is in ms and is the only param of the method
    tempElectrode = firstElectrodeIndex
    while (tempElectrode != -1) {       // while there are still more electrodes
        electrodes[tempElectrode].setDur($1)
        tempElectrode = availableElectrodes[tempElectrode]  // move to the next electrode
    }
}

proc setDelayElectrodes(){
    // Sets the delay of all electrodes currently in the simulation
    // the delay is in ms and is the only param of the method
    tempElectrode = firstElectrodeIndex
    while (tempElectrode != -1) {       // while there are still more electrodes
        electrodes[tempElectrode].setDel($1)
        tempElectrode = availableElectrodes[tempElectrode]  // move to the next electrode
    }
}

proc outputElectrodeSetup(){local tempElectrode
    tempElectrode = firstElectrodeIndex
    while (tempElectrode != -1) {       // while there are still more electrodes
        electrodes[tempElectrode].printDataAdvanced()
        print " "
        tempElectrode = availableElectrodes[tempElectrode]  // move to the next electrode
    }
}

proc removeElectrode(){local indexToRemove, tempElectrode, tempPrev
    // To remove an electrode the user must know what the index is for that electrode
    indexToRemove = $1
    
    // we need to change the list of currently used electrodes to skip over the electrode being removed
    if(indexToRemove == firstElectrodeIndex){
        firstElectrodeIndex = availableElectrodes[indexToRemove]
    }else{
        tempPrev = -1
        tempElectrode = firstElectrodeIndex
        while (tempElectrode != -1 && tempElectrode != indexToRemove) { // loop until we get to the electrode being removed
            tempPrev = tempElectrode
            tempElectrode = availableElectrodes[tempElectrode]  // move to the next electrode
        }
        availableElectrodes[tempPrev] = availableElectrodes[indexToRemove]  // have the previous electrode skip the current electrode
    }

    // we need to add to the list of unused electrodes
    availableElectrodes[indexToRemove] = nextElectrodeIndex
    nextElectrodeIndex = indexToRemove
}

proc saveElectrodeConfig(){local tempElectrodeIndex, tempIndex, tempModelNum localobj configFile, tempElectrode 
    // saves the electrode config to config.ses which contains the commands needed
    //  to reload the current electrode config.
    // Warning this will reorder your electrodes if you deleted and added electrodes while
    //  building the current electrode config.
    // First, create the config file
    configFile = new File("config.ses")
    configFile.aopen()
    configFile.printf("turnOnCustomElectrodes()\n")

    // Now we will go through each electrode in the current configuration and save
    //  commands that will recreate each electrode
    tempElectrodeIndex = firstElectrodeIndex
    tempIndex = 0
    while (tempElectrodeIndex != -1) {
        tempElectrode = electrodes[tempElectrodeIndex]
        configFile.printf("createElectrode(%d,%f,%f)\n", tempElectrode.getModelNum(), tempElectrode.getXPos(), tempElectrode.getYPos())

        // Each model will have all of its respective parameters saved
        tempModelNum = electrodes[tempElectrodeIndex].getModelNum()
        if(tempModelNum == 0){  // dc electrode
            configFile.printf("electrodes[%d].electrodeModel.amp=%f\n", tempIndex, tempElectrode.electrodeModel.amp)
            configFile.printf("electrodes[%d].electrodeModel.del=%f\n", tempIndex, tempElectrode.electrodeModel.del)
            configFile.printf("electrodes[%d].electrodeModel.train=%f\n", tempIndex, tempElectrode.electrodeModel.train)
        }
        tempElectrodeIndex = availableElectrodes[tempElectrodeIndex]
        tempIndex = tempIndex + 1 // Move to the next electrode position
    }
    configFile.close()
}